CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124151645
GitHash:0c7fb94
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Drag and drop the ExampleSBSImages folder into the File list panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', "Here, we use regular expressions to extract the well ID from each file. If the row and column are specified using the metadata tags 'WellRow' and 'WellColumn', respectively, CellProfiler will put them together to form a new tag called 'Well'."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<WellRow>[A-H]) - (?P<WellColumn>[0-9]{1}) fld (?P<Field>[0-6])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file does contain ".tif")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigMyelin': u'WellColumn', u'Brightfield': u'WellColumn', u'OrigAxon': u'WellColumn', u'OrigDAPI': u'WellColumn'}, {u'OrigMyelin': u'WellRow', u'Brightfield': u'WellRow', u'OrigAxon': u'WellRow', u'OrigDAPI': u'WellRow'}, {u'OrigMyelin': u'Field', u'Brightfield': u'Field', u'OrigAxon': u'Field', u'OrigDAPI': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
    Select the rule criteria:or (file does contain "DAPI - DAPI).tif")
    Name to assign these images:OrigDAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "FITC).tif")
    Name to assign these images:OrigMyelin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "TexasRed).tif")
    Name to assign these images:OrigAxon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Brightfield - DAPI).tif")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.001,1.0
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
CalculateMath:[module_num:6|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
    Name the output measurement:MeasurementNuclei
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ApplyThreshold:[module_num:7|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
    Select the input image:OrigAxon
    Name the output image:ThreshAxon
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureImageAreaOccupied:[module_num:8|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshAxon

MeasureImageQuality:[module_num:9|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:3
    Threshold count:3
    Select the images to measure:OrigDAPI,OrigMyelin
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:100
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:10|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notes:['Flag image if any of the following criteria are met', '1. PLLS <-2.0 Axon image', '2. PLLS <-2.0 Myelin image', '3. nuclei count below 1500', '4. axon density below 40%']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
    Hidden:1
    Hidden:4
    Name the flag's category:Metadata
    Name the flag:QCFlag
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
    Select the object to be used for flagging:Nuclei
    Which measurement?:ImageQuality_PowerLogLogSlope_OrigAxon
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigMyelin
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Count_Nuclei
    Flag images based on low values?:Yes
    Minimum value:1500
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:AreaOccupied_AreaOccupied_ThreshAxon
    Flag images based on low values?:Yes
    Minimum value:1700000
    Flag images based on high values?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Count_Nuclei,Image|AreaOccupied_AreaOccupied_ThreshAxon,Image|AreaOccupied_TotalArea_ThreshAxon,Image|ImageQuality_MinIntensity_OrigMyelin,Image|ImageQuality_MinIntensity_OrigAxon,Image|ImageQuality_MinIntensity_OrigDAPI,Image|ImageQuality_TotalIntensity_OrigMyelin,Image|ImageQuality_TotalIntensity_OrigAxon,Image|ImageQuality_TotalIntensity_OrigDAPI,Image|ImageQuality_PowerLogLogSlope_OrigMyelin,Image|ImageQuality_PowerLogLogSlope_OrigAxon,Image|ImageQuality_PowerLogLogSlope_OrigDAPI,Image|ImageQuality_PercentMaximal_OrigMyelin,Image|ImageQuality_PercentMaximal_OrigAxon,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
    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:12|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigAxon,OrigDAPI,OrigMyelin
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:96
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    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:3
    Properties group field count:1
    Properties filter field count:1
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Select an image to include:OrigDAPI
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:blue
    Select an image to include:OrigAxon
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:red
    Select an image to include:OrigMyelin
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:green
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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