CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124151645
GitHash:0c7fb94
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Drag and drop the ExampleSBSImages folder into the File list panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', "Here, we use regular expressions to extract the well ID from each file. If the row and column are specified using the metadata tags 'WellRow' and 'WellColumn', respectively, CellProfiler will put them together to form a new tag called 'Well'."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<WellRow>[A-H]) - (?P<WellColumn>[0-9]{1}) fld (?P<Field>[0-6])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:or (file does contain "0.tif")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigMyelin': u'WellColumn', u'OrigAxon': u'WellColumn', u'OrigDAPI': u'WellColumn'}, {u'OrigMyelin': u'WellRow', u'OrigAxon': u'WellRow', u'OrigDAPI': u'WellRow'}, {u'OrigMyelin': u'Field', u'OrigAxon': u'Field', u'OrigDAPI': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
    Select the rule criteria:or (file does contain "DAPI - DAPI)_0.tif")
    Name to assign these images:OrigDAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "FITC)_0.tif")
    Name to assign these images:OrigMyelin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "TexasRed)_0.tif")
    Name to assign these images:OrigAxon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:["Correct for uneven illumination by creating an illumination correction function. Since the image is mostly foreground, we use the 'Regular' method here. The idea is to aggregate the images that it reflects the uneven intensity variation across all of them. This function will be created on the first cycle of the pipeline."]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
    Select the input image:OrigDAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Create an illumination correction function of the GFP image in the same way as the nuclei image.']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
    Select the input image:OrigAxon
    Name the output image:IllumAxon
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigMyelin
    Name the output image:IllumMyelin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPI
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    Select method for constructing file names:Single name
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    Enter single file name:DAPIILLUM
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    Saved file format:mat
    Output file location:Default Input Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:9|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notes:["Save the GFP illumination correction function as a MAT file, naming the image 'Channel2ILLUM'"]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
    Select the type of image to save:Image
    Select the image to save:IllumAxon
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    Select method for constructing file names:Single name
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    Enter single file name:AXONILLUM
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    Saved file format:mat
    Output file location:Default Input Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumMyelin
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    Select method for constructing file names:Single name
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    Enter single file name:MYELINILLUM
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    Saved file format:mat
    Output file location:Default Input Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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