CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124151645
GitHash:0c7fb94
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Drag and drop the ExampleSBSImages folder into the File list panel']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
    Filter images?:Custom
    Select the rule criteria:or (extension does istif) (file does endwith ".mat")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', "Here, we use regular expressions to extract the well ID from each file. If the row and column are specified using the metadata tags 'WellRow' and 'WellColumn', respectively, CellProfiler will put them together to form a new tag called 'Well'.", '', "For the 'Import from file' extraction method, click the 'Browse' button to select the .csv in the ExampleSBSImages folder containing the control and dose information for each well row and column.", '', 'Lastly, select the type of metadata for the dose (floating point) and controls (integer), since they will be used by the CalculateStatistics module downstream.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"ImageNumber": "integer", "Column": "text", "SBS_Controls": "integer", "SBS_Doses": "float", "WellRow": "text", "WellColumn": "text", "Row": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<WellRow>[A-H]) - (?P<WellColumn>[0-9]{1}) fld (?P<Field>[0-6])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "0.tif")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the images by selecting 'tif' files and by matching files in the folder against the text pattern 'Channel1-' and 'Channel2-' for each channel. Load the illumination functions by matching files in the folder against  'Channel1' and 'Channel2' for each channel and for the text pattern '.mat'.  The four images together comprise an image set. ", '', "We use metadata matching to pair each DNA and GFP stain channel for each well. We also select '(None)' for the DNA and GFP illumination functions in order to pair these two files with every well."]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
    Assign a name to:Images matching rules
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    Match metadata:[{u'rawAxon': u'WellRow', u'IllumMYELIN': None, u'IllumAXON': None, u'rawMyelin': u'WellRow', u'rawDAPI': u'WellRow', u'IllumDAPI': None}, {u'rawAxon': u'WellColumn', u'IllumMYELIN': None, u'IllumAXON': None, u'rawMyelin': u'WellColumn', u'rawDAPI': u'WellColumn', u'IllumDAPI': None}, {u'rawAxon': u'Field', u'IllumMYELIN': None, u'IllumAXON': None, u'rawMyelin': u'Field', u'rawDAPI': u'Field', u'IllumDAPI': None}]
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
    Select the rule criteria:and (file does contain "DAPI - DAPI)_0.tif")
    Name to assign these images:rawDAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC)_0.tif")
    Name to assign these images:rawMyelin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TexasRed)_0.tif")
    Name to assign these images:rawAxon
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI") (file does endwith ".mat")
    Name to assign these images:IllumDAPI
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "MYELIN") (file does endwith ".mat")
    Name to assign these images:IllumMYELIN
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "AXON") (file does endwith ".mat")
    Name to assign these images:IllumAXON
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:rawDAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:6|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
    Select the input image:rawAxon
    Name the output image:CorrAXON
    Select the illumination function:IllumAXON
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:7|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
    Select the input image:rawMyelin
    Name the output image:CorrMYELIN
    Select the illumination function:IllumMYELIN
    Select how the illumination function is applied:Divide

RescaleIntensity:[module_num:8|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
    Select the input image:CorrDAPI
    Name the output image:RescaledDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:CorrAXON
    Name the output image:RescaledAXON
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:CorrMYELIN
    Name the output image:RescaledMYELIN
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Identify the nuclei from the DNA image. Some manual adjustment of the threshold correction factor and  smoothing filter size is required to optimize segmentation.']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
    Select the input image:RescaledDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.001,1
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
ApplyThreshold:[module_num:12|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
    Select the input image:RescaledMYELIN
    Name the output image:ThreshMyelin
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:0.1
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    Manual threshold:0.18
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:ThreshMyelin
    Name the output image:FilteredMyelin
    Select the operation:Enhance
    Feature size:100
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:FilteredMyelin
    Name the primary objects to be identified:Myelin
    Typical diameter of objects, in pixel units (Min,Max):15,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:0.8
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.2,1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:Myelin
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:Myelin
    Name the output image:MyelinRegion
    Select the color format:Binary (black & white)
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
ConserveMemory:[module_num:17|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
    Specify which images?:Images to keep
    Select image to keep:MyelinRegion
    Select image to keep:RescaledAXON

IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:MyelinRegion
    Name the primary objects to be identified:MyelinDef
    Typical diameter of objects, in pixel units (Min,Max):5,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:MyelinOutlines
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ApplyThreshold:[module_num:19|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
    Select the input image:RescaledAXON
    Name the output image:ThreshAXON
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:RescaledAXON
    Name the primary objects to be identified:Axons
    Typical diameter of objects, in pixel units (Min,Max):5,1000000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:AxonOutlines
    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Binary image
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    Select binary image:ThreshAXON
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
MeasureImageAreaOccupied:[module_num:21|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshAXON
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:MyelinRegion

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:ThreshAXON
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    Select method for constructing file names:From image filename
    Select image name for file prefix:rawAxon
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:processed
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:MyelinRegion
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    Select method for constructing file names:From image filename
    Select image name for file prefix:rawMyelin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:processed
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Objects
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    Select the objects to save:Nuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:rawDAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:processed
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Count_Nuclei,Image|AreaOccupied_TotalArea_MyelinRegion,Image|AreaOccupied_TotalArea_ThreshAXON,Image|AreaOccupied_AreaOccupied_MyelinRegion,Image|AreaOccupied_AreaOccupied_ThreshAXON,Image|Metadata_WellRow,Image|Metadata_Well,Image|Metadata_WellColumn,Image|Metadata_Field
    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
