CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<Number>[0-9]+)
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\/](?P<Group>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:Original
    Conversion method:Split
    Image type::Channels
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    Channel count:3
    Channel number::Red: 1
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    Image name::RedOriginal
    Channel number::Green: 2
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    Image name::GreenOriginal
    Channel number::Blue: 3
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    Image name::BlueOriginal

CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:RedOriginal
    Name the output image:RedIllum
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:GreenOriginal
    Name the output image:GreenIllum
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:BlueOriginal
    Name the output image:BlueIllum
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:RedOriginal
    Name the output image:RedCorr
    Select the illumination function:RedIllum
    Select how the illumination function is applied:Subtract
    Select the input image:GreenOriginal
    Name the output image:GreenCorr
    Select the illumination function:GreenIllum
    Select how the illumination function is applied:Subtract
    Select the input image:BlueOriginal
    Name the output image:BlueCorr
    Select the illumination function:BlueIllum
    Select how the illumination function is applied:Subtract

ApplyThreshold:[module_num:7|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
    Select the input image:GreenCorr
    Name the output image:GreenThresh
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1.5
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:GreenThresh
    Name the output image:GreenFiltered
    Select the operation:Suppress
    Feature size:25
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RedCorr
    Name the primary objects to be identified:RedObjects
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.15,1.0
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:RedOutlines
    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GreenFiltered
    Name the primary objects to be identified:GreenObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Manual threshold:0.001
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:GreenObjects
    Name the output image:GreenObjectsImg
    Select the color type:Grayscale
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
RelateObjects:[module_num:12|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
    Select the input child objects:GreenObjects
    Select the input parent objects:RedObjects
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:No
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:BlueCorr
    Name the primary objects to be identified:BlueObjects
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:BlueOutlines
    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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    Handling of objects if excessive number of objects identified:Continue
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
GrayToColor:[module_num:14|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
    Select a color scheme:RGB
    Select the input image to be colored red:RedOutlines
    Select the input image to be colored green:GreenObjectsImg
    Select the input image to be colored blue:BlueOutlines
    Name the output image:processed
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:processed
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name: processed
    Select file format to use:png
    Output file location:Default Output Folder|\\g<Group>\\\\
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_BlueObjects,Image|Count_RedObjects,Image|Count_GreenObjects,Image|FileName_Original,Image|Metadata_Group,Image|Metadata_Number,RedObjects|Children_GreenObjects_Count,GreenObjects|Parent_RedObjects
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
