CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<Number>[0-9]+)
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\/](?P<Group>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:Original
    Conversion method:Split
    Image type::Channels
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    Channel count:2
    Channel number::Red: 1
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    Image name::RedOriginal
    Channel number::Green: 2
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    Image name::GreenOriginal

CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:GreenOriginal
    Name the output image:GreenIllum
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationApply:[module_num:4|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
    Select the input image:GreenOriginal
    Name the output image:GreenCorrected
    Select the illumination function:GreenIllum
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GreenCorrected
    Name the primary objects to be identified:Myelin
    Typical diameter of objects, in pixel units (Min,Max):5,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Myelin
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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
    Name the output objects:MyelinFiltered
    Select the object to filter:Myelin
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.2
    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:MyelinFiltered
    Name the output image:MyelinRegion
    Select the color type:Binary (black & white)
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:MyelinRegion
    Name the output image:MyelinRegionCleaned
    Select the operation:Enhance
    Feature size:12
    Feature type:Speckles
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
ApplyThreshold:[module_num:10|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
    Select the input image:MyelinRegionCleaned
    Name the output image:MyelinRegionCleanedThresh
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.5
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
ConserveMemory:[module_num:11|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
    Specify which images?:Images to keep
    Select image to keep:RedOriginal
    Select image to keep:MyelinRegionCleanedThresh

ApplyThreshold:[module_num:12|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
    Select the input image:RedOriginal
    Name the output image:RedThresh
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1.1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureImageAreaOccupied:[module_num:13|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:RedThresh
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:MyelinRegionCleanedThresh

GrayToColor:[module_num:14|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
    Select a color scheme:RGB
    Select the input image to be colored red:RedThresh
    Select the input image to be colored green:MyelinRegionCleanedThresh
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    Name the output image:Processed
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Processed
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name: processed
    Select file format to use:png
    Output file location:Default Output Folder|\\g<Group>\\\\
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|AreaOccupied_TotalArea_RedThresh,Image|AreaOccupied_TotalArea_MyelinRegionCleanedThresh,Image|AreaOccupied_AreaOccupied_RedThresh,Image|AreaOccupied_AreaOccupied_MyelinRegionCleanedThresh,Image|FileName_Original,Image|Metadata_Group,Image|Metadata_Number
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
