CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:8
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.tif
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    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<Number>[0-9]+)
    Type the regular expression that finds metadata in the subfolder path:.*[\\\\\\\\/](?P<Group>.*)$
    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Original
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:Original
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:Red: 1
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    Image name:Channel

CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:Channel
    Name the output image:ChannelIllum
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:4|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
    Select the input image:Channel
    Name the output image:ChannelCorr
    Select the illumination function:ChannelIllum
    Select how the illumination function is applied:Subtract

ApplyThreshold:[module_num:5|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
    Select the input image:ChannelCorr
    Name the output image:ChannelThresh
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureImageAreaOccupied:[module_num:6|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ChannelThresh

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:ChannelThresh
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name: processed
    Saved file format:png
    Output file location:Default Output Folder|\\\\g<Group>\\\\\\\\
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|AreaOccupied_TotalArea_ChannelThresh,Image|AreaOccupied_AreaOccupied_ChannelThresh,Image|FileName_Original,Image|Metadata_Group,Image|Metadata_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
