CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|svn_version:\'11587\'|variable_revision_number:11|show_window:False|notes:\x5B\x5D]
    File type to be loaded:individual images
    File selection method:Text-Exact match
    Number of images in each group?:3
    Type the text that the excluded images have in common:Do not use
    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder\x7CNone
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
    Specify metadata fields to group by:
    Select subfolders to analyze:
    Image count:1
    Text that these images have in common (case-sensitive):.tif
    Position of this image in each group:1
    Extract metadata from where?:Both
    Regular expression that finds metadata in the file name:(?P<Number>\x5B0-9\x5D+)
    Type the regular expression that finds metadata in the subfolder path:.*\x5B\\\\/\x5D(?P<Group>.*)$
    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:Original
    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
    Name the outline image:LoadedImageOutlines
    Channel number:1
    Rescale intensities?:Yes

ColorToGray:[module_num:2|svn_version:\'10318\'|variable_revision_number:2|show_window:False|notes:\x5B\x5D]
    Select the input image:Original
    Conversion method:Split
    Image type\x3A:Channels
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
    Channel count:1
    Channel number\x3A:Green\x3A 2
    Relative weight of the channel:1
    Image name\x3A:Channel

ApplyThreshold:[module_num:3|svn_version:\'6746\'|variable_revision_number:5|show_window:False|notes:\x5B\x5D]
    Select the input image:Channel
    Name the output image:ChannelThresh
    Select the output image type:Binary (black and white)
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Select the thresholding method:Otsu Global
    Manual threshold:0.0
    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:.75
    Approximate fraction of image covered by objects?:0.01
    Select the input objects:None
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Select the measurement to threshold with:None

MeasureImageAreaOccupied:[module_num:4|svn_version:\'10563\'|variable_revision_number:3|show_window:False|notes:\x5B\x5D]
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
    Select objects to measure:None
    Retain a binary image of the object regions?:No
    Name the output binary image:Stain
    Select a binary image to measure:ChannelThresh

SaveImages:[module_num:5|svn_version:\'10822\'|variable_revision_number:7|show_window:False|notes:\x5B\x5D]
    Select the type of image to save:Image
    Select the image to save:ChannelThresh
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
    Enter single file name:OrigBlue
    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name: processed
    Select file format to use:png
    Output file location:Default Output Folder\x7C\\g<Group>\\\\
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

ExportToSpreadsheet:[module_num:6|svn_version:\'10880\'|variable_revision_number:7|show_window:False|notes:\x5B\x5D]
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:No
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder\x7CNone
    Create a GenePattern GCT file?:No
    Select source of sample row name:Metadata
    Select the image to use as the identifier:None
    Select the metadata to use as the identifier:None
    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image\x7CAreaOccupied_TotalArea_ChannelThresh,Image\x7CAreaOccupied_AreaOccupied_ChannelThresh,Image\x7CFileName_Original,Image\x7CMetadata_Group,Image\x7CMetadata_Number
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
